[General settings]
name: Circuit_Simulator
version: 1.0.0
driver_path: Labber_API
signal_generator: True
signal_analyzer: True

[Circuit Type]
datatype: COMBO
def_value: Transmon Circuit
combo_def_1: Transmon Circuit
combo_def_2: LCJ Circuit
combo_def_3: JC Hamiltonian
section: General setting
group: Basic Circuit Parameter

[Number of Qubits]
datatype: COMBO
def_value: 2
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: General setting
group: Basic Circuit Parameter

[Sampling Rate]
datatype: DOUBLE
def_value: 1000000000.0
section: General setting
group: Basic Circuit Parameter

[Initial State]
datatype: STRING
def_value: basis
section: General setting
group: Basic Simulation Parameter

[Absolute Tolerance]
datatype: DOUBLE
def_value: 1e-09
section: General setting
group: Basic Simulation Parameter

[Relative Tolerance]
datatype: DOUBLE
def_value: 1e-07
section: General setting
group: Basic Simulation Parameter

[Internal Steps]
datatype: DOUBLE
def_value: 2500
section: General setting
group: Basic Simulation Parameter

[Uniform Truncation]
datatype: BOOLEAN
def_value: True
section: General setting
group: Basic Simulation Parameter

[Uniform Truncation Degree]
datatype: DOUBLE
def_value: 3
state_quant: Uniform Truncation
state_value: True
section: General setting
group: Basic Simulation Parameter

[Truncation Q1]
datatype: DOUBLE
def_value: 3
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: General setting
group: Basic Simulation Parameter

[Truncation Q2]
datatype: DOUBLE
def_value: 3
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: General setting
group: Basic Simulation Parameter

[Truncation Q3]
datatype: DOUBLE
def_value: 3
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: General setting
group: Basic Simulation Parameter

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

[file name]
datatype: STRING
def_value: test
section: General setting
group: General Utility

[file index]
datatype: DOUBLE
def_value: 0
section: General setting
group: General Utility

[write json]
datatype: BUTTON
section: General setting
group: General Utility

[write mat]
datatype: BUTTON
section: General setting
group: General Utility

[auto update values]
datatype: BOOLEAN
def_value: False
section: General setting
group: General Utility

[Q1 f01]
datatype: DOUBLE
unit: Hz
def_value: 6000000000.0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Qubits

[Q2 f01]
datatype: DOUBLE
unit: Hz
def_value: 6000000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Qubits

[Q3 f01]
datatype: DOUBLE
unit: Hz
def_value: 6000000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Qubits

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

[Q1 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -300000000.0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Qubits

[Q2 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -300000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Qubits

[Q3 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -300000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Qubits

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

[g12]
datatype: DOUBLE
unit: Hz
def_value: 20000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Coupling Network

[g13]
datatype: DOUBLE
unit: Hz
def_value: 20000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Coupling Network

[g14]
datatype: DOUBLE
unit: Hz
def_value: 20000000.0
state_quant: Number of Qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: JC Hamiltonian
group: Coupling Network

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

[Modulation On]
datatype: BOOLEAN
def_value: True
section: JC Hamiltonian
group: Modulation

[Uniform XY LO]
datatype: BOOLEAN
def_value: True
section: JC Hamiltonian
group: Modulation

[XY LO Freq]
datatype: DOUBLE
unit: Hz
def_value: 0
show_in_measurement_dlg: True
state_quant: Uniform XY LO
state_value: True
section: JC Hamiltonian
group: Modulation

[Q1 XY-I]
datatype: VECTOR
unit: Hz3
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Modulation

[Q1 XY-Q]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Modulation

[Q1 XY LO Freq]
datatype: DOUBLE
unit: Hz
def_value: 0
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Modulation

[Q1 Z]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Modulation

[Q2 XY-I]
datatype: VECTOR
unit: Hz3
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Modulation

[Q2 XY-Q]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Modulation

[Q2 XY LO Freq]
datatype: DOUBLE
unit: Hz
def_value: 0
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Modulation

[Q2 Z]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Modulation

[Q3 XY-I]
datatype: VECTOR
unit: Hz3
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Modulation

[Q3 XY-Q]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Modulation

[Q3 XY LO Freq]
datatype: DOUBLE
unit: Hz
def_value: 0
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Modulation

[Q3 Z]
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Modulation

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

[Decoherence On]
datatype: BOOLEAN
def_value: True
section: JC Hamiltonian
group: Decoherence

[Q1 T1]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Decoherence

[Q1 Tphi]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: JC Hamiltonian
group: Decoherence

[Q2 T1]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Decoherence

[Q2 Tphi]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: JC Hamiltonian
group: Decoherence

[Q3 T1]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Decoherence

[Q3 Tphi]
datatype: DOUBLE
unit: s
def_value: 1e-05
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: JC Hamiltonian
group: Decoherence

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

[Q1 f01_max]
datatype: DOUBLE
unit: Hz
def_value: 7200000000.0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Qubits

[Q1 f01_min]
datatype: DOUBLE
unit: Hz
def_value: 4000000000.0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Qubits

[Q1 Ec]
datatype: DOUBLE
unit: Hz
def_value: 200000000.0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Qubits

[Q1 Voltage period]
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Qubits

[Q1 Voltage operating point]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Qubits

[Q2 f01_max]
datatype: DOUBLE
unit: Hz
def_value: 7200000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Qubits

[Q2 f01_min]
datatype: DOUBLE
unit: Hz
def_value: 4000000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Qubits

[Q2 Ec]
datatype: DOUBLE
unit: Hz
def_value: 200000000.0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Qubits

[Q2 Voltage period]
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Qubits

[Q2 Voltage operating point]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Qubits

[Q3 f01_max]
datatype: DOUBLE
unit: Hz
def_value: 7200000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Qubits

[Q3 f01_min]
datatype: DOUBLE
unit: Hz
def_value: 4000000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Qubits

[Q3 Ec]
datatype: DOUBLE
unit: Hz
def_value: 200000000.0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Qubits

[Q3 Voltage period]
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Qubits

[Q3 Voltage operating point]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Qubits

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

[r12]
datatype: DOUBLE
def_value: 0.01
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Coupling_Network

[r13]
datatype: DOUBLE
def_value: 0.01
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Coupling_Network

[r14]
datatype: DOUBLE
def_value: 0.01
state_quant: Number of Qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Transmon Circuit
group: Coupling_Network

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

[Q1 Flux]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Modulation

[Q2 Flux]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Modulation

[Q3 Flux]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Modulation

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

[Use Capacitance Network]
datatype: BOOLEAN
def_value: False
section: Transmon Circuit
group: Capacitance Network

[C11]
datatype: DOUBLE
unit: fF
def_value: 70
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
section: Transmon Circuit
group: Capacitance Network

[C12]
datatype: DOUBLE
unit: fF
def_value: 70
state_quant: Number of Qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Transmon Circuit
group: Capacitance Network

[C13]
datatype: DOUBLE
unit: fF
def_value: 70
state_quant: Number of Qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Transmon Circuit
group: Capacitance Network

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

[L Matrix]
datatype: VECTOR
permission: WRITE
section: LCJ Circuit
group: Capacitance Network

[C Matrix]
datatype: VECTOR
permission: WRITE
section: LCJ Circuit
group: Capacitance Network

[J Matrix]
datatype: VECTOR
permission: WRITE
section: LCJ Circuit
group: Capacitance Network

[Eigenenergies]
datatype: VECTOR
unit: Hz
x_name: Level
permission: READ
section: Output
group: Eigenenergies

[Eigenenergies maximum overlap]
datatype: VECTOR
unit: Hz
x_name: Level
permission: READ
section: Output
group: Eigenenergies

[Ener Gap]
datatype: DOUBLE
unit: Hz
permission: READ
section: Output
group: Eigenenergies

[Ener Gap Trace]
datatype: VECTOR
unit: Hz
permission: READ
section: Output
group: Eigenenergies

[Level func]
datatype: STRING
permission: WRITE
section: Output
group: Eigenenergies

